PsychoPy2experiment version="1.80.06"
Settings
  Data filename = 'data/%s_%s_%s' %(expInfo['participant'], expName, expInfo['date'])
  Monitor = testMonitor
  Window size (pixels) = [1024, 768]
  Full-screen window = True
  Experiment info = {'participant':'', 'session':'001'}
  expName = textInputTest
  Units = use prefs
  Screen = 1
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Routines
  Routine trial
    StaticComponent ISI
      stopVal [duration (s)] = 0.5
      startVal [time (s)] = 0.0
    TextComponent text
      startVal [time (s)] = 0.0
      letterHeight = 0.075
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      text:
        This example shows how to enter text strings in PsychoPy Builder

        press SPACE to continue.
    KeyboardComponent key_resp_2
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
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    TextComponent text_4
      text = Author: John Allen - University of Kent, UK
      pos = [0.3, -0.7]
      startVal [time (s)] = 0.0
      letterHeight = 0.05
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  Routine gatherText
    CodeComponent code
      Begin Experiment:
        inputText = ""
      Each Frame:
        n= len(theseKeys)
        i = 0
        while i < n:

            if theseKeys[i] == 'return':
                # pressing RETURN means time to stop
                continueRoutine = False
                break

            elif theseKeys[i] == 'backspace':
                inputText = inputText[:-1]  # lose the final character
                i = i + 1

            elif theseKeys[i] == 'space':
                inputText += ' '
                i = i + 1

            elif theseKeys[i] in ['lshift', 'rshift']:
                shift_flag = True
                i = i + 1

            else:
                if len(theseKeys[i]) == 1:
                    # we only have 1 char so should be a normal key,
                    # otherwise it might be 'ctrl' or similar so ignore it
                    if shift_flag:
                        inputText += chr( ord(theseKeys[i]) - ord(' '))
                        shift_flag = False
                    else:
                        inputText += theseKeys[i]

                i = i + 1
      Begin Routine:
        theseKeys=""
        shift_flag = False
        text_3.alignHoriz ='left'
      End Routine:
        # let's store the final text string into the results finle...
        thisExp.addData('inputText', inputText)
        inputText=""
    TextComponent text_3
      text [set every frame] = $(word + '\n' + inputText)
      pos = [-0.5, 0]
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    KeyboardComponent key_resp_3
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      store = all keys
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  Routine end
    TextComponent text_2
      text = Check the results file in the data sub folder
      stopVal [duration (s)] = 3
      startVal [time (s)] = 0.0
      letterHeight = 0.08
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Flow
  Routine trial
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = textInputTest.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{u'word': u'cat'},
      {u'word': u'dog'},
      {u'word': u'pig'},
      {u'word': u'rat'}]
    Routine gatherText
  LoopTerminator trials
  Routine end
